PsychoPy2experiment version="2020.2.10"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=3C83396B
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1280, 800]
  expName = Simcolourproject_2stim_asymm_good
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Routines
  Routine welcome_instr
    TextComponent text_54
      color = yellow
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = You may quit the experiment at anytime by pressing <ESC>
      units = norm
      wrapWidth = 1000
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    TextComponent welcome
      color = yellow
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        Welcome to this experiment

        This will take about 45 minutes
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      saveStartStop = False
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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
  Routine stim_response_instr
    MovieComponent movie_2
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = exampletrial.mp4
      pos = (0, 150)
      size = 600,400
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_14
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
      wrapWidth = 1000
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    TextComponent text_17
      color = yellow
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        Throughout the experiment, focus on the cross at the centre of the screen.
        A circle will flash out quickly on the screen.

        Sometimes you will need to decide the similarity levels of the previous circle to a circle on the next screen.

        0 => most similar colour (least different colour)
        7 => most different colour (least similar colour)

        After choosing, move your cursor back to the centre and click and hold the box to continue.
  Routine catch_insrt
    TextComponent space_15
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    KeyboardComponent key_resp_17
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    MovieComponent movie_3
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = catchvideo.mp4
      pos = 0,100
      size = 600,400
      startVal [time (s)] = 0.0
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    TextComponent text_18
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        Sometimes there will be a special trial where you will just be asked to click on a particular value.
        Please click and hold the value for that trial.
  Routine response
    MouseComponent mouse
      clickable = response1disk,response3disk,response5disk,response7disk
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        order = randint(1,100);
      Begin Routine:
        # Count trial numbers
        event.clearEvents()
      End Routine:
        # Save similarity rating
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a-b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d

        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            similarity = 7
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            similarity = 6
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            similarity = 5
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            similarity = 4
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            similarity = 3
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            similarity = 2
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            similarity = 1
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            similarity = 0

        trialnumber = trialnumber + 1
        thisExp.addData("similarity", similarity);
        thisExp.addData("response_time", mouse.mouseClock.getTime())  # Save time relative to start of mouse
    ImageComponent response1disk
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response3disk
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response5disk
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response7disk
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
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    TextComponent text_23
      color = black
      letterHeight = 0.05
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Please choose the similarity level of the circle with the previously cued circle.
        Please click and hold to indicate your choice.
        0 => Most similar
        7 => Most different
  Routine Stim1_display
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        Circle1_colour =[];
        colourstrial = colPairs[Colourpair]
        print(Colourpair)
        print(Temporder)
        #Ecc = stimpositions[trialnumber]
        print(Ecc)
        print(LoopCounter)

        # Location of stimulis in first loop
        if LoopCounter ==1:
            # Select stim position from array
          Ecc = stimpositions[trialnumber];
          if Ecc == 'onetwo':
            circle1posx = -100
            circle1posy = 100;
          if Ecc == 'onethree':
            circle1posx = -100
            circle1posy = 100;
          if Ecc == 'twoone':
            circle1posx = 100
            circle1posy = 100;
          if Ecc == 'twofour':
            circle1posx = 100
            circle1posy = 100;
          if Ecc == 'threeone':
            circle1posx = -100
            circle1posy = -100;
          if Ecc == 'threefour':
            circle1posx = -100
            circle1posy = -100;
          if Ecc == 'fourtwo':
            circle1posx = 100
            circle1posy = -100;
          if Ecc == 'fourthree':
            circle1posx = 100
            circle1posy = -100;
         #Location of stimulus in second loop
        if LoopCounter == 2:
            # Select the stim position from array
          Ecc = stimpositions[(trialnumber-162)];
          if Ecc == 'onetwo':
            circle1posx = -100
            circle1posy = -100;
          if Ecc == 'onethree':
            circle1posx = -100
            circle1posy = -100;
          if Ecc == 'twoone':
            circle1posx = 100
            circle1posy = -100;
          if Ecc == 'twofour':
            circle1posx = 100
            circle1posy = -100;
          if Ecc == 'threeone':
            circle1posx = -100
            circle1posy = 100;
          if Ecc == 'threefour':
            circle1posx = -100
            circle1posy = 100;
          if Ecc == 'fourtwo':
            circle1posx = 100
            circle1posy = 100;
          if Ecc == 'fourthree':
            circle1posx = 100
            circle1posy = 100;


        # Set circle colour
        if Temporder == "first":
            Circle1_colour = colourcodesrgb[colourstrial[0]]
        if Temporder == "second":
            Circle1_colour = colourcodesrgb[colourstrial[1]]




        # Set circle colour

        print(Colourpair)
        print(colourstrial)
      End Routine:
        thisExp.addData("Circle1_colour", Circle1_colour);
        thisExp.addData("Ecc", Ecc);
        #thisExp.addData("circle1posx", circle1posx);
        #thisExp.addData("circle1posy", circle1posy);
    PolygonComponent Circle_1
      fillColor [set every repeat] = $Circle1_colour
      lineColor [set every repeat] = $Circle1_colour
      nVertices = 1000
      pos [set every repeat] = $(circle1posx,circle1posy)
      shape = regular polygon...
      size [set every repeat] = 100,100
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 0.25
      units = pix
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    PolygonComponent centre_cross4
      fillColor = $[1,1,1]
      lineWidth = 1.5
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.500
      units = norm
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  Routine response_2
    MouseComponent mouse_2
      clickable = rectangle
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent response1disk_2
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response3disk_2
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response5disk_2
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response7disk_2
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
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    PolygonComponent rectangle
      fillColor [set every repeat] = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.100, 0.080)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        trialnumber = 0;
        grey = (.2, .2, .2);
      Begin Routine:
        trialnumbertext = f'You have finished {trialnumber} of 324 questions';

        event.clearEvents()
    TextComponent text_25
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Please click and hold the grey rectangle in the middle of the response numbers to continue
      units = norm
      wrapWidth = 1000
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    TextComponent text_24
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialnumbertext
      units = norm
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  Routine catch_1
    MouseComponent mouse_3
      clickable = response1disk_3,response3disk_3,response5disk_3,response7disk_3,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent response1disk_3
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response3disk_3
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response5disk_3
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response7disk_3
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Both
      Begin Experiment:
        catchtrialorder = []
        for i in range(0,20):
            n = randint(0,324)
            catchtrialorder.append(n)
      Begin JS Experiment:
        // Set up catch trials

        //catchtrialorder = Array.from({length: 20}, () => Math.floor(Math.random() * 324));
      Begin JS Routine:
        catchnumber = (Math.floor((Math.random() * ((7 - 0) + 1))) + 0);
        event.clearEvents();
        catchtext = `SPECIAL TRIAL PLEASE CLICK AND HOLD ${catchnumber}`;
      Begin Routine:
        # Select random number for catch trial

        catchnumber = randint(0,7);

        event.clearEvents()

        catchtext = f'SPECIAL TRIAL PLEASE CLICK AND HOLD {catchnumber}'
      Each Frame:
        # Run catch trials
        if not ((trialnumber == catchtrialorder[0]) or (trialnumber == catchtrialorder[1]) or (trialnumber == catchtrialorder[2]) or (trialnumber == catchtrialorder[3]) or (trialnumber == catchtrialorder[4]) or (trialnumber == catchtrialorder[5]) or (trialnumber == catchtrialorder[6]) or (trialnumber == catchtrialorder[7]) or (trialnumber == catchtrialorder[8]) or (trialnumber == catchtrialorder[9]) or (trialnumber == catchtrialorder[10]) or (trialnumber == catchtrialorder[11]) or (trialnumber == catchtrialorder[12]) or (trialnumber == catchtrialorder[13]) or (trialnumber == catchtrialorder[14]) or (trialnumber == catchtrialorder[15]) or (trialnumber == catchtrialorder[16]) or (trialnumber == catchtrialorder[17]) or (trialnumber == catchtrialorder[18]) or (trialnumber == catchtrialorder[19])):
            continueRoutine=False
      Each JS Frame:
        if (Catch === 0){
            continueRoutine = false
            }
      End JS Routine:
        mousexpos = mouse.getPos()[0];
        mouseypos = mouse.getPos()[1];
        x11d = (a - (b / 2));
        y11d = (a + (b / 2));
        x12d = (a + (b / 2));
        y12d = (a + (b / 2));
        x13d = (a - (b / 2));
        y13d = (a - (b / 2));
        a1d = ((((y12d - y13d) * (mousexpos - x13d)) + ((x13d - x12d) * (mouseypos - y13d))) / (((y12d - y13d) * (x11d - x13d)) + ((x13d - x12d) * (y11d - y13d))));
        b1d = ((((y13d - y11d) * (mousexpos - x13d)) + ((x11d - x13d) * (mouseypos - y13d))) / (((y12d - y13d) * (x11d - x13d)) + ((x13d - x12d) * (y11d - y13d))));
        c1d = ((1 - a1d) - b1d);
        x21d = (a - (b / 2));
        y21d = (a - (b / 2));
        x22d = (a + (b / 2));
        y22d = (a + (b / 2));
        x23d = (a + (b / 2));
        y23d = (a - (b / 2));
        a2d = ((((y22d - y23d) * (mousexpos - x23d)) + ((x23d - x22d) * (mouseypos - y23d))) / (((y22d - y23d) * (x21d - x23d)) + ((x23d - x22d) * (y21d - y23d))));
        b2d = ((((y23d - y21d) * (mousexpos - x23d)) + ((x21d - x23d) * (mouseypos - y23d))) / (((y22d - y23d) * (x21d - x23d)) + ((x23d - x22d) * (y21d - y23d))));
        c2d = ((1 - a2d) - b2d);
        x31d = (a - (b / 2));
        y31d = (- (a - (b / 2)));
        x32d = (a + (b / 2));
        y32d = (- (a - (b / 2)));
        x33d = (a + (b / 2));
        y33d = (- (a + (b / 2)));
        a3d = ((((y32d - y33d) * (mousexpos - x33d)) + ((x33d - x32d) * (mouseypos - y33d))) / (((y32d - y33d) * (x31d - x33d)) + ((x33d - x32d) * (y31d - y33d))));
        b3d = ((((y33d - y31d) * (mousexpos - x33d)) + ((x31d - x33d) * (mouseypos - y33d))) / (((y32d - y33d) * (x31d - x33d)) + ((x33d - x32d) * (y31d - y33d))));
        c3d = ((1 - a3d) - b3d);
        x41d = (a - (b / 2));
        y41d = (- (a - (b / 2)));
        x42d = (a + (b / 2));
        y42d = (- (a + (b / 2)));
        x43d = (a - (b / 2));
        y43d = (- (a + (b / 2)));
        a4d = ((((y42d - y43d) * (mousexpos - x43d)) + ((x43d - x42d) * (mouseypos - y43d))) / (((y42d - y43d) * (x41d - x43d)) + ((x43d - x42d) * (y41d - y43d))));
        b4d = ((((y43d - y41d) * (mousexpos - x43d)) + ((x41d - x43d) * (mouseypos - y43d))) / (((y42d - y43d) * (x41d - x43d)) + ((x43d - x42d) * (y41d - y43d))));
        c4d = ((1 - a4d) - b4d);
        x51d = (- (a + (b / 2)));
        y51d = (- (a + (b / 2)));
        x52d = (- (a - (b / 2)));
        y52d = (- (a - (b / 2)));
        x53d = (- (a - (b / 2)));
        y53d = (- (a + (b / 2)));
        a5d = ((((y52d - y53d) * (mousexpos - x53d)) + ((x53d - x52d) * (mouseypos - y53d))) / (((y52d - y53d) * (x51d - x53d)) + ((x53d - x52d) * (y51d - y53d))));
        b5d = ((((y53d - y51d) * (mousexpos - x53d)) + ((x51d - x53d) * (mouseypos - y53d))) / (((y52d - y53d) * (x51d - x53d)) + ((x53d - x52d) * (y51d - y53d))));
        c5d = ((1 - a5d) - b5d);
        x61d = (- (a + (b / 2)));
        y61d = (- (a - (b / 2)));
        x62d = (- (a - (b / 2)));
        y62d = (- (a - (b / 2)));
        x63d = (- (a + (b / 2)));
        y63d = (- (a + (b / 2)));
        a6d = ((((y62d - y63d) * (mousexpos - x63d)) + ((x63d - x62d) * (mouseypos - y63d))) / (((y62d - y63d) * (x61d - x63d)) + ((x63d - x62d) * (y61d - y63d))));
        b6d = ((((y63d - y61d) * (mousexpos - x63d)) + ((x61d - x63d) * (mouseypos - y63d))) / (((y62d - y63d) * (x61d - x63d)) + ((x63d - x62d) * (y61d - y63d))));
        c6d = ((1 - a6d) - b6d);
        x71d = (- (a + (b / 2)));
        y71d = (a + (b / 2));
        x72d = (- (a - (b / 2)));
        y72d = (a - (b / 2));
        x73d = (- (a + (b / 2)));
        y73d = (a - (b / 2));
        a7d = ((((y72d - y73d) * (mousexpos - x73d)) + ((x73d - x72d) * (mouseypos - y73d))) / (((y72d - y73d) * (x71d - x73d)) + ((x73d - x72d) * (y71d - y73d))));
        b7d = ((((y73d - y71d) * (mousexpos - x73d)) + ((x71d - x73d) * (mouseypos - y73d))) / (((y72d - y73d) * (x71d - x73d)) + ((x73d - x72d) * (y71d - y73d))));
        c7d = ((1 - a7d) - b7d);
        x81d = (- (a + (b / 2)));
        y81d = (a + (b / 2));
        x82d = (- (a - (b / 2)));
        y82d = (a + (b / 2));
        x83d = (- (a - (b / 2)));
        y83d = (a - (b / 2));
        a8d = ((((y82d - y83d) * (mousexpos - x83d)) + ((x83d - x82d) * (mouseypos - y83d))) / (((y82d - y83d) * (x81d - x83d)) + ((x83d - x82d) * (y81d - y83d))));
        b8d = ((((y83d - y81d) * (mousexpos - x83d)) + ((x81d - x83d) * (mouseypos - y83d))) / (((y82d - y83d) * (x81d - x83d)) + ((x83d - x82d) * (y81d - y83d))));
        c8d = ((1 - a8d) - b8d);
        if (((((0 <= a1d) && (a1d <= 1)) && ((0 <= b1d) && (b1d <= 1))) && ((0 <= c1d) && (c1d <= 1)))) {
            catchresponse = 7;
        } else {
            if (((((0 <= a2d) && (a2d <= 1)) && ((0 <= b2d) && (b2d <= 1))) && ((0 <= c2d) && (c2d <= 1)))) {
                catchresponse = 6;
            } else {
                if (((((0 <= a3d) && (a3d <= 1)) && ((0 <= b3d) && (b3d <= 1))) && ((0 <= c3d) && (c3d <= 1)))) {
                    catchresponse = 5;
                } else {
                    if (((((0 <= a4d) && (a4d <= 1)) && ((0 <= b4d) && (b4d <= 1))) && ((0 <= c4d) && (c4d <= 1)))) {
                        catchresponse = 4;
                    } else {
                        if (((((0 <= a5d) && (a5d <= 1)) && ((0 <= b5d) && (b5d <= 1))) && ((0 <= c5d) && (c5d <= 1)))) {
                            catchresponse = 3;
                        } else {
                            if (((((0 <= a6d) && (a6d <= 1)) && ((0 <= b6d) && (b6d <= 1))) && ((0 <= c6d) && (c6d <= 1)))) {
                                catchresponse = 2;
                            } else {
                                if (((((0 <= a7d) && (a7d <= 1)) && ((0 <= b7d) && (b7d <= 1))) && ((0 <= c7d) && (c7d <= 1)))) {
                                    catchresponse = 1;
                                } else {
                                    if (((((0 <= a8d) && (a8d <= 1)) && ((0 <= b8d) && (b8d <= 1))) && ((0 <= c8d) && (c8d <= 1)))) {
                                        catchresponse = 0;
                                    }
                                }
                            }
                        }
                    }
                }
            }
        }
        thisExp.addData("catchresponse", catchresponse);
        thisExp.addData("catchnumber", catchnumber);
        thisExp.addData("response_time_catch", mouse_3.mouseClock.getTime());
        thisExp.addData("Catch", Catch);
      End Routine:
        # Save similarity rating
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a-b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d





        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            catchresponse  = 7
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            catchresponse  = 6
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            catchresponse  = 5
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            catchresponse  = 4
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            catchresponse  = 3
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            catchresponse  = 2
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            catchresponse  = 1
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            catchresponse = 0


        thisExp.addData("catchresponse", catchresponse);
        thisExp.addData("catchnumber", catchnumber);
        thisExp.addData("response_time_catch", mouse_3.mouseClock.getTime())  # Save time relative to start of mouse
        thisExp.addData("Catch", Catch);
    TextComponent text_26
      color = black
      letterHeight = 0.05
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $catchtext
      units = norm
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    PolygonComponent rectangle_2
      fillColor = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.100, 0.080)
      startVal [time (s)] = 0.0
      units = norm
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  Routine startup
    CodeComponent code_7
      Code Type = Both
      Begin Experiment:
        import pandas as pd
        from psychopy import tools
        import random as rnd
        rnd.seed()
    CodeComponent js_code1
      Code Type = JS
      Begin JS Experiment:
        // Code to convert python to javascript that is not automatically converted

        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager
        shuffle = function (a) {
            return util.shuffle(a);
        }
        random = function (a) {
            return Math.random();
        }
        range = function(start, end) {
            var ans = [];
            for (let i = start; i <= end; i++) {
                ans.push(i);
            }
            return ans;
        }


        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }

        Array.prototype.append = [].push
        //pi=Math.PI;
        //sin = Math.sin;
        //cos = Math.cos;
        tan = Math.tan;

        sum = function (arr) {
        return arr.reduce((a,b)=>a+b)
        }
    CodeComponent code_2
      Code Type = JS
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      Begin JS Experiment:
        //get random numbers which follows a uniform distribution
        function getRandom(min, max)
        {
            return Math.floor(Math.random() * (max - min + 1)) + min;
        }

        colPairscheck = []; //associative array or JS-object
        colPairs = []; //associative array or JS-object

            length = 81;

        for(var i = 0; i < length; i++)
        {
            // do not forget to think about the range of numbers.
            // Because if you want generate 1000 pairs then it should
            // be a range with more than 33 numbers and not with 10.
            // In other case you will get a loop, because 33 x 33 = 999
            var val1 = getRandom(0, 92),
                val2 = getRandom(0, 92),
                key = val1 + '_' + val2; // generate the key

            if(colPairscheck[key] != undefined) //check if we have it already
            {
                i--;
                //continue; //go to next loop step with i = i - 1
                //The continue statement terminates execution of the statements in the current iteration of the current or labeled loop, and continues execution of the loop with the next iteration.
                //https://developer.mozilla.org/en-US/docs/Web/JavaScript/Reference/Statements/continue
            }
            //if we do not have it then we store it as new array:
            else
                colPairscheck[key] = [val1, val2];
                colPairs[i] = [val1, val2];//new array with our values
        }
        console.log(colPairs)
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  Routine Stim1_display_prac
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        # Circle position

        # Set circle position
        Ecc =  stimpositions[randint(0,92)];
        print(Ecc)

        if Ecc == 'onetwo':
            circle1posx = -100
            circle1posy = 100;
        if Ecc == 'onethree':
            circle1posx = -100
            circle1posy = 100;
        if Ecc == 'twoone':
            circle1posx = 100
            circle1posy = 100;
        if Ecc == 'twofour':
            circle1posx = 100
            circle1posy = 100;
        if Ecc == 'threeone':
            circle1posx = -100
            circle1posy = -100;
        if Ecc == 'threefour':
            circle1posx = -100
            circle1posy = -100;
        if Ecc == 'fourtwo':
            circle1posx = 100
            circle1posy = -100;
        if Ecc == 'fourthree':
            circle1posx = 100
            circle1posy = -100;


        # Randomly select circle colour
        # Convert colour codes for js

        Circle1_col = colourcodesrgb[randint(0,92)];
      End Routine:
        thisExp.addData("Circle1_col", Circle1_col);
        thisExp.addData("Ecc", Ecc);
    PolygonComponent Circle
      fillColor [set every repeat] = $Circle1_col
      lineColor [set every repeat] = $Circle1_col
      nVertices = 1000
      pos [set every repeat] = $(circle1posx,circle1posy)
      shape = regular polygon...
      size [set every repeat] = 100,100
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 0.25
      units = pix
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    PolygonComponent centre_cross4_2
      fillColor = $[1,1,1]
      lineWidth = 1.5
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.500
      units = norm
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  Routine response_prac
    MouseComponent mouse_5
      clickable = response1disk_5,response3disk_5,response5disk_5,response7disk_5,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0
      syncScreenRefresh = True
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        # Set response size
        a = (screen.size[0]/2)*0.10;
        b = (screen.size[0]/2)*0.158
      Begin Routine:
        event.clearEvents()

        # Count trial numbers

        pracnumber =  pracnumber + 1;

        # Randomly select circle colour

        Colour_2 = randint(1,9);

        # Set circle colour
        if Colour_2 == 1:
            Circle2_col = (1, -1, -1);
        elif Colour_2 == 2:
            Circle2_col = (1, 0.33, -1);
        elif Colour_2 == 3:
            Circle2_col = (0.32, 1, -1);
        elif Colour_2 == 4:
            Circle2_col = (-1, 1, -1);
        elif Colour_2 == 5:
            Circle2_col = (-1, 1, 0.33);
        elif Colour_2 == 6:
            Circle2_col = (-1, 0.32, 1);
        elif Colour_2 == 7:
            Circle2_col = (-1, -1, 1);
        elif Colour_2 == 8:
            Circle2_col = (0.33, -1, 1);
        elif Colour_2 == 9:
            Circle2_col = (1, -1, 0.33);
      Each Frame:
        # Similarity for feedback
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a-b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d


        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            similarity = 7
            responsenumber = 7
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            similarity = 6
            responsenumber = 6
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            similarity = 5
            responsenumber = 5
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            similarity = 4
            responsenumber = 4
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            similarity = 3
            responsenumber = 3
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            similarity = 2
            responsenumber = 2
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            similarity = 1
            responsenumber = 1
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            similarity = 0
            responsenumber = 0
      End Routine:
        # Save similarity rating
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a-b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d


        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            similarity = 7
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            similarity = 6
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            similarity = 5
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            similarity = 4
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            similarity = 3
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            similarity = 2
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            similarity = 1
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            similarity = 0


        thisExp.addData("similarity", similarity);
        thisExp.addData("response_time", mouse_5.mouseClock.getTime())  # Save time relative to start of mouse
    ImageComponent response1disk_5
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response3disk_5
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response5disk_5
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response7disk_5
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_29
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Please choose the similarity level of the two previously cued circles.
        Please click and hold to indicate your choice.
        0 => Most similar
        7 => Most different
  Routine catch_prac
    MouseComponent mouse_7
      clickable = response1disk_7,response3disk_7,response5disk_7,response7disk_7
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    ImageComponent response1disk_7
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response3disk_7
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response5disk_7
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response7disk_7
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Experiment:
        # Set up catch trials

        catchtrialorderprac = []
        for i in range(0,2):
            n = randint(0,7)
            catchtrialorderprac.append(n)

        catchnumberprac = randint(0,7);
      Begin Routine:
        # Select random number for catch trial



        catchtext = f'SPECIAL TRIAL PLEASE JUST CLICK AND HOLD {catchnumberprac}'

        event.clearEvents()
      Each Frame:
        # Run catch trials
        if not ((pracnumber == catchtrialorderprac[0]) or (pracnumber == catchtrialorderprac[1])):
            continueRoutine=False
      End Routine:
        # Save similarity rating
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a-b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d

        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            catchprac = 7
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            catchprac = 6
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            catchprac = 5
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            catchprac = 4
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            catchprac = 3
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            catchprac = 2
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            catchprac = 1;
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            catchprac = 0;
            thisExp.addData("catchprac", catchprac);



        thisExp.addData("catchnumberprac", catchnumberprac);
    TextComponent text_32
      color = black
      letterHeight = 0.05
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $catchtext
      units = norm
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    PolygonComponent rectangle_5
      fillColor [set every repeat] = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.1, 0.08)
      startVal [time (s)] = 0.0
      units = norm
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  Routine special_trial
    TextComponent text_33
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .250
      text = SPECIAL TRIAL
      units = norm
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    CodeComponent code_13
      Code Type = Both
      Each JS Frame:
        if (Catch === 0){
            continueRoutine = false
            }
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  Routine summary2_prac
    MouseComponent mouse_6
      clickable = rectangle_4
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    ImageComponent response1disk_6
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response3disk_6
      image = response45.png
      pos [set every repeat] = a,-a
      size [set every repeat] = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response5disk_6
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response7disk_6
      image = response01.png
      pos [set every repeat] = -a,a
      size [set every repeat] = b,b
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent rectangle_4
      fillColor [set every repeat] = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.1, 0.08)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        pracnumber = 0;
      Begin Routine:
        pracnumbertext = f'You have finished {pracnumber} of 7 practice questions';

        event.clearEvents()

        # Run catch trials
        if not ((pracnumber == catchtrialorderprac[0]) or (pracnumber == catchtrialorderprac[1])):
            continueRoutine=False
      Each Frame:
        # Run catch trials
        if not ((pracnumber == catchtrialorderprac[0]) or (pracnumber == catchtrialorderprac[1])):
            continueRoutine=False
    TextComponent text_30
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text = Please click and hold the grey rectangle in the middle of the response numbers to continue
      units = norm
      wrapWidth = 1000
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    TextComponent text_31
      color = black
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pracnumbertext
      units = norm
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  Routine special_trial_prac
    TextComponent text_36
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .250
      text = SPECIAL TRIAL
      units = norm
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    CodeComponent code_15
      Code Type = Auto->JS
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      Each Frame:
        # Run catch trials
        if not ((pracnumber == catchtrialorderprac[0]) or (pracnumber == catchtrialorderprac[1])):
            continueRoutine=False
  Routine colour_circle_instr_2
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_9
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent text_9
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = During the test, you will see some of these colours displayed below.
      units = norm
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    ImageComponent image_2
      image = 93colours.png
      pos = (-50, 100)
      size = (600, 400)
      startVal [time (s)] = 0.0
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  Routine instr_prac
    TextComponent space_10
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent text_10
      color = yellow
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        You are going to do a few practice trials to make you be more familiar with the experiment.
        When you are ready, please press SPACE to start the practice trials
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine begin
    TextComponent space_19
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent text_46
      color = yellow
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        You have finished the practice trial.

        Next page will be the formal test.

        If you are ready, please press SPACE button to start the experiment.
    KeyboardComponent key_resp_22
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine summary_prac
    MouseComponent mouse_10
      clickable = rectangle_8
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    ImageComponent response1disk_10
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response3disk_10
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response5disk_10
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response7disk_10
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent rectangle_8
      fillColor [set every repeat] = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.1, 0.08)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Experiment:
        pracnumber = 0;
      Begin Routine:
        pracnumbertext = f'You have finished {pracnumber} of 7 practice questions';

        event.clearEvents()
    TextComponent text_49
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Please click and hold on the grey rectangle in the middle of the response numbers to continue
      units = norm
      wrapWidth = 1000
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    TextComponent text_50
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pracnumbertext
      units = norm
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  Routine response_sum
    MouseComponent mouse_11
      clickable = rectangle
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent response1disk_11
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response3disk_11
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response5disk_11
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response7disk_11
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
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    PolygonComponent rectangle_9
      fillColor [set every repeat] = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.100, 0.080)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_24
      Code Type = Both
      Begin Experiment:
        trialnumber = 0;
      Begin JS Experiment:
        trialnumber = 0;
      Begin JS Routine:
        trialnumbertext = `You have finished ${trialnumber} of 324 questions`;
        event.clearEvents();

        if (Catch === 0){
            continueRoutine = false
            }
      Begin Routine:
        trialnumbertext = f'You have finished {trialnumber} of 324 questions';

        event.clearEvents()

        # Run catch trials
        if not ((trialnumber == catchtrialorder[0]) or (trialnumber == catchtrialorder[1]) or (trialnumber == catchtrialorder[2]) or (trialnumber == catchtrialorder[3]) or (trialnumber == catchtrialorder[4]) or (trialnumber == catchtrialorder[5]) or (trialnumber == catchtrialorder[6]) or (trialnumber == catchtrialorder[7]) or (trialnumber == catchtrialorder[8]) or (trialnumber == catchtrialorder[9]) or (trialnumber == catchtrialorder[10]) or (trialnumber == catchtrialorder[11]) or (trialnumber == catchtrialorder[12]) or (trialnumber == catchtrialorder[13]) or (trialnumber == catchtrialorder[14]) or (trialnumber == catchtrialorder[15]) or (trialnumber == catchtrialorder[16]) or (trialnumber == catchtrialorder[17]) or (trialnumber == catchtrialorder[18]) or (trialnumber == catchtrialorder[19])):
            continueRoutine=False
      Each Frame:
        # Run catch trials
        if not ((trialnumber == catchtrialorder[0]) or (trialnumber == catchtrialorder[1]) or (trialnumber == catchtrialorder[2]) or (trialnumber == catchtrialorder[3]) or (trialnumber == catchtrialorder[4]) or (trialnumber == catchtrialorder[5]) or (trialnumber == catchtrialorder[6]) or (trialnumber == catchtrialorder[7]) or (trialnumber == catchtrialorder[8]) or (trialnumber == catchtrialorder[9]) or (trialnumber == catchtrialorder[10]) or (trialnumber == catchtrialorder[11]) or (trialnumber == catchtrialorder[12]) or (trialnumber == catchtrialorder[13]) or (trialnumber == catchtrialorder[14]) or (trialnumber == catchtrialorder[15]) or (trialnumber == catchtrialorder[16]) or (trialnumber == catchtrialorder[17]) or (trialnumber == catchtrialorder[18]) or (trialnumber == catchtrialorder[19])):
            continueRoutine=False
      Each JS Frame:
        if (Catch === 0){
            continueRoutine = false
            }
    TextComponent text_51
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Please click and hold the grey rectangle in the middle of the response numbers to continue
      units = norm
      wrapWidth = 1000
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    TextComponent text_52
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialnumbertext
      units = norm
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  Routine consent
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        posx = ((window.innerWidth / 2) * 0.85);
        posy = ((window.innerWidth / 2) * 0.85);
    TextComponent text_53
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Precision Phenomenology Experiment
        Just a little bit more to read before the experiment...this is an Informed Consent Form. Please read and understand the statements below.

        I understand that my taking part in the study is voluntary and that I am free to leave the study at any time, without giving any reason. I understand that my medical care or legal rights will not be affected in any way.
        I agree to the use and release of study-related information about me for the purposes described in this Informed Consent Form.
        I agree to the re-use of data collected in this study for future studies in a de-identified manner as described in this Informed Consent form.
        I understand that my consent continues until and unless I withdraw my consent that can be done at any time by giving notice to the investigator. I understand that if I withdraw my consent I will not be able to continue to take part in the study.
        I understand that if I withdraw consent, the study researchers will no longer use or release information that identifies me in connection with the study unless it is needed to keep the scientific quality of the study. I understand that if I withdraw consent the study researchers may still use any study-related information about me that was collected before I withdrew consent.
        I have read and I understand the information provided in this Informed Consent Form. I have had the opportunity to ask questions and have had these questions answered satisfactorily.
        I have had time to consider the information provided in this Informed Consent Form to consider answers to my questions, and to consider whether I wish to take part in the study.
        If you understand the statements above, and freely consent to participate in the study, press [Space] to begin the experiment.
    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = monash-logo-mono.png
      pos [set every repeat] = (-posx, posy)
      size = 150,75
      startVal [time (s)] = 0.0
      units = pix
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  Routine survey1
    TextComponent copyText_1
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_4
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        modify = false;
        copyText_1.text = '';
      Begin Routine:
        textFill_5 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_1 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_1 = textFill_1[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_1 += '.'
                elif keys[0] in allLetters:
                    textFill_1+=keys[0]  # Adds character to text if in alphabet.
                copyText_1.setText(textFill_1)  # Set new text on screen
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','1','2','3','4','5','6','7','8','9','0','return','backspace','space']});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }




        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            copyText_1.text = copyText_1.text.slice(0, -1);
            textAdd = undefined;
        } else if (textAdd !== undefined) {
            if (modify) {
                copyText_1.text = copyText_1.text + textAdd.toUpperCase();
                modify = false;
            } else {
                copyText_1.text = copyText_1.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("answer1", copyText_1.text)
        copyText_1.setText('')  // empty the onscreen text ready for next input

        thisExp.addData("rt1", t);
      End Routine:
        thisExp.addData('answer1', textFill_1)
        thisExp.nextEntry()
    TextComponent question_4
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.5
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      text:
        Please answer the next 7 questions to finish the experiment. Please type your reponse and press <ENTER> to submit,

        1. Did you have any difficulty in seeing the location of the two circles on each trial? (y or n)
    TextComponent submitanswer
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine survey2
    TextComponent copyText_2
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        modify = false;
        copyText_2.text = '';
      Begin Routine:
        textFill_2 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_2 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_2 = textFill_2[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_2 += '.'
                elif keys[0] in allLetters:
                    textFill_2+=keys[0]  # Adds character to text if in alphabet.
                copyText_2.setText(textFill_2)  # Set new text on screen
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','1','2','3','4','5','6','7','8','9','0','return','backspace','space']});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }




        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            copyText_2.text = copyText_2.text.slice(0, -1);
            textAdd = undefined;
        } else if (textAdd !== undefined) {
            if (modify) {
                copyText_2.text = copyText_2.text + textAdd.toUpperCase();
                modify = false;
            } else {
                copyText_2.text = copyText_2.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("answer2", copyText_2.text)
        copyText_2.setText('')  // empty the onscreen text ready for next input

        thisExp.addData("rt2", t);
      End Routine:
        thisExp.addData('answer2', textFill_2)
        thisExp.nextEntry()
    TextComponent question
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.5
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      text:
        2. Did you have any difficulty in knowing what colour the central circles were? (y or n)
    TextComponent submitanswer_2
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine survey3
    TextComponent copyText_3
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_2
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        modify = false;
        copyText_3.text = '';
      Begin Routine:
        textFill_3 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_3 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_3 = textFill_3[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_3 += '.'
                elif keys[0] in allLetters:
                    textFill_3+=keys[0]  # Adds character to text if in alphabet.
                copyText_3.setText(textFill_3)  # Set new text on screen
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','1','2','3','4','5','6','7','8','9','0','return','backspace','space']});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            copyText_3.text = copyText_3.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                copyText_3.text = copyText_3.text + textAdd.toUpperCase();
                modify = false;
            } else {
                copyText_3.text = copyText_3.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("answer3", copyText_3.text)
        copyText_3.setText('')  // empty the onscreen text ready for next input
        thisExp.addData("rt3", t);
      End Routine:
        thisExp.addData('answer3', textFill_3)
        thisExp.nextEntry()
    TextComponent question_2
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.5
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      text:
        3. Did you have any difficulty in knowing what colour the peripheral circles were? (y or n)
    TextComponent submitanswer_3
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine survey_4
    TextComponent copyText_4
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_3
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        modify = false;
        copyText_4.text = '';
      Begin Routine:
        textFill_4 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_4 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_4 = textFill_4[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_4 += '.'
                elif keys[0] in allLetters:
                    textFill_4+=keys[0]  # Adds character to text if in alphabet.
                copyText_4.setText(textFill_4)  # Set new text on screen
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','1','2','3','4','5','6','7','8','9','0','return','backspace','space']});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            copyText_4.text = copyText_4.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                copyText_4.text = copyText_4.text + textAdd.toUpperCase();
                modify = false;
            } else {
                copyText_4.text = copyText_4.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("answer4", copyText_4.text)
        copyText_4.setText('')  // empty the onscreen text ready for next input
        thisExp.addData("rt4", t);
      End Routine:
        thisExp.addData('answer4', textFill_4)
        thisExp.nextEntry()
    TextComponent question_3
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      text = 4. Do you have normal visual acuity, or corrected-to-normal wearing glasses or contact lenses? (y or n)
      units = norm
      wrapWidth = 1.5
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    TextComponent submitanswer_4
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine survey5
    TextComponent copyText_5
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_5
      Code Type = Auto->JS
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      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin Routine:
        textFill_5 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                #if keys[0] == 'space':
                    #textFill_5 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_5 = textFill_5[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_5 += '.'
                elif keys[0] in allLetters:
                    textFill_5+=keys[0]  # Adds character to text if in alphabet.
                copyText_5.setText(textFill_5)  # Set new text on screen
      End Routine:
        thisExp.addData('answer5', textFill_5)
        thisExp.nextEntry()
    TextComponent question_5
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.5
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      text:
        5. Do you have any colour vision impairment? (y or n)
        If yes, please describe the type (e.g) 'red-green colour blind').
    TextComponent submitanswer_5
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine survey6
    TextComponent copyText_6
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_6
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        modify = false;
        copyText_6.text = '';
      Begin Routine:
        textFill_6 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_6 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_6 = textFill_6[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_6 += '.'
                elif keys[0] in allLetters:
                    textFill_6+=keys[0]  # Adds character to text if in alphabet.
                copyText_6.setText(textFill_6)  # Set new text on screen
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','1','2','3','4','5','6','7','8','9','0','return','backspace','space']});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            copyText_6.text = copyText_6.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                copyText_6.text = copyText_6.text + textAdd.toUpperCase();
                modify = false;
            } else {
                copyText_6.text = copyText_6.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("answer6", copyText_6.text)
        copyText_6.setText('')  // empty the onscreen text ready for next input

        thisExp.addData("rt6", t);
      End Routine:
        thisExp.addData('answer6', textFill_6)
        thisExp.nextEntry()
    TextComponent question_6
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.5
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      text:
        6. Did you base your judgements on any of the following stratergies?
        - colour catergories (e.g 'red','blue','green')
        - colour opponecy axes (e.g 'red to green', 'blue to yellow')
        - another stratergy
        - no particular stratergy
        Please type which stratergy, and if you selected 'another stratergy' please describe it.
    TextComponent submitanswer_6
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine survey7
    TextComponent copyText_7
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_7
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        modify = false;
        copyText_7.text = '';
      Begin Routine:
        textFill_7 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_7 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_7 = textFill_7[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_7 += '.'
                elif keys[0] in allLetters:
                    textFill_7+=keys[0]  # Adds character to text if in alphabet.
                copyText_7.setText(textFill_7)  # Set new text on screen
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','1','2','3','4','5','6','7','8','9','0','return','backspace', 'space']});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            copyText_7.text = copyText_7.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                copyText_7.text = copyText_7.text + textAdd.toUpperCase();
                modify = false;
            } else {
                copyText_7.text = copyText_7.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("answer7", copyText_7.text)
        copyText_7.setText('')  // empty the onscreen text ready for next input
        thisExp.addData("rt7", t);
      End Routine:
        thisExp.addData('answer7', textFill_7)
        thisExp.nextEntry()
    TextComponent question_7
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.5
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      text:
        Please type any other comments you may have.

        You have now finished the experiment. Thank you for your participation!
    TextComponent submitanswer_7
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine responseprac_feedback
    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        if 0 <= responsenumber <= 1:
            responsefeedback = f'You selected {responsenumber}'
            responsefeedback1 = f'{responsenumber} indicates you found the colours very similar';

        if 2 <= responsenumber <= 3:
            responsefeedback = f'You selected {responsenumber}'
            responsefeedback1 = f'{responsenumber} indicates you found the colours similar';


        if 4 <= responsenumber  <= 5:
            responsefeedback = f'You selected {responsenumber}' ;
            responsefeedback1 = f'{responsenumber} indicates you found the colours different';

        if 6 <= responsenumber  <= 7:
            responsefeedback = f'You selected {responsenumber}' ;
            responsefeedback1 = f'{responsenumber} indicates you found the colours very different';
      Each Frame:
        if 0 <= responsenumber <= 3:
            responsefeedback = f'You selected {responsenumber} indicating you found the colours are similar';


        if 4 <= responsenumber  <= 7:
            responsefeedback = f'You selected {responsenumber} indicating you found the colours are dissimilar';
    TextComponent text_55
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $responsefeedback
      units = norm
      wrapWidth = 1000
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    TextComponent text_56
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $responsefeedback1
      units = norm
      wrapWidth = 1000
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  Routine Stim2_display_prac
    CodeComponent code_26
      Code Type = Auto->JS
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      Begin Routine:
        # Set circle position
        if Ecc == 'onetwo':
            circle1posx = 100
            circle1posy = 100;
        if Ecc == 'onethree':
            circle1posx = -100
            circle1posy = -100;
        if Ecc == 'twoone':
            circle1posx = -100
            circle1posy = 100;
        if Ecc == 'twofour':
            circle1posx = 100
            circle1posy = -100;
        if Ecc == 'threeone':
            circle1posx = -100
            circle1posy = 100;
        if Ecc == 'threefour':
            circle1posx = 100
            circle1posy = -100;
        if Ecc == 'fourtwo':
            circle1posx = 100
            circle1posy = 100;
        if Ecc == 'fourthree':
            circle1posx = -100
            circle1posy = -100;

        # Randomly select circle colour

        Circle2_col = colourcodesrgb[randint(0,92)];
        #Circle2_col[0]=((Circle2_col[0]/50)-1);
        #Circle2_col[1]=((Circle2_col[1]/50)-1)
        #Circle2_col[2]=((Circle2_col[2]/50)-1);
      End Routine:
        thisExp.addData("Circle2_col", Circle2_col);
        thisExp.addData("Ecc", Ecc);
    PolygonComponent Circle_4
      fillColor [set every repeat] = $Circle2_col
      lineColor [set every repeat] = $Circle2_col
      nVertices = 1000
      pos [set every repeat] = $(circle1posx,circle1posy)
      shape = regular polygon...
      size [set every repeat] = 100,100
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 0.25
      units = pix
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    PolygonComponent centre_cross4_3
      fillColor = $[1,1,1]
      lineWidth = 1.5
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.500
      units = norm
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  Routine Stim2_display
    CodeComponent code_27
      Code Type = Auto->JS
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      Begin Routine:
        Circle2_colour =[];
        colourstrial = colPairs[Colourpair]
        print(Ecc)
        print(LoopCounter)



        # Set circle colour
        if Temporder == "first":
            Circle2_colour = colourcodesrgb[colourstrial[1]]

        if Temporder == "second":
            Circle2_colour = colourcodesrgb[colourstrial[0]]


        # Circle position and size
        if LoopCounter == 1:
           Ecc = stimpositions[(trialnumber)]
           if Ecc == 'onetwo':
            circle2posx = 100
            circle2posy = 100;
           if Ecc == 'onethree':
            circle2posx = -100
            circle2posy = -100;
           if Ecc == 'twoone':
                circle2posx = -100
                circle2posy = 100;
           if Ecc == 'twofour':
             circle2posx = 100
             circle2posy = -100;
           if Ecc == 'threeone':
                circle2posx = -100
                circle2posy = 100;
           if Ecc == 'threefour':
                circle2posx = 100
                circle2posy = -100;
           if Ecc == 'fourtwo':
              circle2posx = 100
              circle2posy = 100;
           if Ecc == 'fourthree':
                circle2posx = -100
                circle2posy = -100;

        if LoopCounter ==2:
           Ecc = stimpositions[(trialnumber-162)]
           if Ecc == 'onetwo':
            circle2posx = 100
            circle2posy = -100;
           if Ecc == 'onethree':
            circle2posx = -100
            circle2posy = 100;
           if Ecc == 'twoone':
            circle2posx = -100
            circle2posy = -100;
           if Ecc == 'twofour':
            circle2posx = 100
            circle2posy = 100;
           if Ecc == 'threeone':
            circle2posx = -100
            circle2posy = -100;
           if Ecc == 'threefour':
            circle2posx = 100
            circle2posy = 100;
           if Ecc == 'fourtwo':
            circle2posx = 100
            circle2posy = -100;
           if Ecc == 'fourthree':
            circle2posx = -100
            circle2posy = 100;


        print(Circle2_colour)
      End Routine:
        thisExp.addData("Circle2_colour", Circle2_colour);
        thisExp.addData("Ecc", Ecc);
        #thisExp.addData("circle2posx", circle2posx);
        #thisExp.addData("circle2posy", circle2posy);
    PolygonComponent Circle_2
      fillColor [set every repeat] = $Circle2_colour
      lineColor [set every repeat] = $Circle2_colour
      nVertices = 1000
      pos [set every repeat] = $(circle2posx,circle2posy)
      shape = regular polygon...
      size [set every repeat] = 100,100
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 0.25
      units = pix
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    PolygonComponent centre_cross4_4
      fillColor = $[1,1,1]
      lineWidth = 1.5
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.500
      units = norm
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  Routine colourcodes
    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Experiment:
        colourcodesrgb=[]# Create an array to store the colour codes
        codenum = 0 # Start counter to index colour codes to change to rgb values
      Begin Routine:
        colourcodesrgb.append(((Colourcodes)))
        #convert colour codes into rgb codes for pavolvia
        colourcodesrgb[codenum][0]=((colourcodesrgb[codenum][0]/50)-1);
        colourcodesrgb[codenum][1]=((colourcodesrgb[codenum][1]/50)-1);
        colourcodesrgb[codenum][2]=((colourcodesrgb[codenum][2]/50)-1);
        codenum = codenum + 1;
        print(colourcodesrgb[codenum])
        print(colourcodesrgb)
        # import the colourcodes from the excel file and to array
  Routine stimpositions
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        stimpositions=[]# Create an array to store the stimulus positions
      Begin Routine:
        stimpositions.append(((StimulusPos)))
        print(stimpositions)
        # import the colourcodes from the excel file and to array
  Routine LoopCounter
    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Experiment:
        #Create loop counter to switch positions of colour for each loop based on previous loop position
        LoopCounter = 0
      Begin Routine:
        LoopCounter = LoopCounter + 1
  Routine blankscreen
    PolygonComponent centre_cross_blank
      fillColor = $[1,1,1]
      lineWidth = 1.5
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.500
      units = norm
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Flow
  Routine startup
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = colourcodes.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Colourcodes', '[88.23, 53.72, 63.52];')]),
      OrderedDict([('Colourcodes', ' [77.25, 34.50, 48.23];')]),
      OrderedDict([('Colourcodes', '[69.41, 38.03, 47.48];')]),
      OrderedDict([('Colourcodes', '[61.56, 11.37, 32.94];')]),
      OrderedDict([('Colourcodes', '[49.01, 24.31, 30.98];')]),
      OrderedDict([('Colourcodes', '[49.41, 4.70, 27.45];')]),
      OrderedDict([('Colourcodes', '[32.54, 14.90, 23.92];')]),
      OrderedDict([('Colourcodes', ' [70.19, 54.5, 72.15];')]),
      OrderedDict([('Colourcodes', '[56.47, 35.68, 66.27];')]),
      OrderedDict([('Colourcodes', ' [54.90, 37.64, 57.64];')]),
      OrderedDict([('Colourcodes', ' [39.60, 17.25, 49.01];')]),
      OrderedDict([('Colourcodes', '[36.86, 26.27, 39.21];')]),
      OrderedDict([('Colourcodes', ' [26.66, 6.27, 35.29];')]),
      OrderedDict([('Colourcodes', ' [20.39, 12.54, 23.52];')]),
      OrderedDict([('Colourcodes', '[59.6, 59.21, 75.68];')]),
      OrderedDict([('Colourcodes', '[44.70, 44.70, 79.21];')]),
      OrderedDict([('Colourcodes', ' [44.70, 42.35, 57.64];')]),
      OrderedDict([('Colourcodes', '[22.74, 19.60, 62.35];')]),
      OrderedDict([('Colourcodes', ' [30.98, 28.62, 42.74];')]),
      OrderedDict([('Colourcodes', '[15.29, 11.76, 43.52];')]),
      OrderedDict([('Colourcodes', ' [9.41, 9.01, 22.74];')]),
      OrderedDict([('Colourcodes', ' [52.94, 63.92, 79.21];')]),
      OrderedDict([('Colourcodes', ' [26.27, 48.23, 77.25];')]),
      OrderedDict([('Colourcodes', ' [37.64, 48.23, 65.88];')]),
      OrderedDict([('Colourcodes', '[5.09, 31.37, 63.92];')]),
      OrderedDict([('Colourcodes', ' [25.09, 35.29, 48.23];')])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
    Routine colourcodes
  LoopTerminator trials
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = Stimpositions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('StimulusPos', 'onetwo')]),
      OrderedDict([('StimulusPos', 'onethree')]),
      OrderedDict([('StimulusPos', 'twoone')]),
      OrderedDict([('StimulusPos', 'twofour')]),
      OrderedDict([('StimulusPos', 'threeone')]),
      OrderedDict([('StimulusPos', 'threefour')]),
      OrderedDict([('StimulusPos', 'fourtwo')]),
      OrderedDict([('StimulusPos', 'fourthree')]),
      OrderedDict([('StimulusPos', 'onetwo')]),
      OrderedDict([('StimulusPos', 'onethree')]),
      OrderedDict([('StimulusPos', 'twoone')]),
      OrderedDict([('StimulusPos', 'twofour')]),
      OrderedDict([('StimulusPos', 'threeone')]),
      OrderedDict([('StimulusPos', 'threefour')]),
      OrderedDict([('StimulusPos', 'fourtwo')]),
      OrderedDict([('StimulusPos', 'fourthree')]),
      OrderedDict([('StimulusPos', 'onetwo')]),
      OrderedDict([('StimulusPos', 'onethree')]),
      OrderedDict([('StimulusPos', 'twoone')]),
      OrderedDict([('StimulusPos', 'twofour')]),
      OrderedDict([('StimulusPos', 'threeone')]),
      OrderedDict([('StimulusPos', 'threefour')]),
      OrderedDict([('StimulusPos', 'fourtwo')]),
      OrderedDict([('StimulusPos', 'fourthree')]),
      OrderedDict([('StimulusPos', 'onetwo')]),
      OrderedDict([('StimulusPos', 'onethree')]),
      OrderedDict([('StimulusPos', 'twoone')]),
      OrderedDict([('StimulusPos', 'twofour')]),
      OrderedDict([('StimulusPos', 'threeone')]),
      OrderedDict([('StimulusPos', 'threefour')]),
      OrderedDict([('StimulusPos', 'fourtwo')]),
      OrderedDict([('StimulusPos', 'fourthree')]),
      OrderedDict([('StimulusPos', 'onetwo')]),
      OrderedDict([('StimulusPos', 'onethree')]),
      OrderedDict([('StimulusPos', 'twoone')]),
      OrderedDict([('StimulusPos', 'twofour')])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
    Routine stimpositions
  LoopTerminator trials_4
  Routine welcome_instr
  Routine consent
  Routine stim_response_instr
  Routine catch_insrt
  Routine colour_circle_instr_2
  Routine instr_prac
  LoopInitiator duringprac loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Stim1_display_prac
    Routine Stim2_display_prac
    Routine response_prac
    Routine responseprac_feedback
    Routine summary_prac
    Routine special_trial_prac
    Routine catch_prac
    Routine summary2_prac
  LoopTerminator duringprac
  Routine begin
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine LoopCounter
    LoopInitiator trials_2 loopType="TrialHandler"
      Selected rows = 0:162
      conditionsFile = Stimconditions.xlsx
      loopType = random
      nReps = 1
      random seed = order
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      conditions:
        [OrderedDict([('Colourpair', 0), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 1), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 2), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 3), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 4), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 5), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 6), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 7), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 8), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 9), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 10), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 11), ('Temporder', 'first'), ('Catch', 1)]),
        OrderedDict([('Colourpair', 12), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 13), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 14), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 15), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 16), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 17), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 18), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 19), ('Temporder', 'first'), ('Catch', 0)]),
        OrderedDict([('Colourpair', 20), ('Temporder', 'first'), ('Catch', 0)])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
      Routine Stim1_display
      Routine Stim2_display
      Routine blankscreen
      Routine response
      Routine response_2
      Routine special_trial
      Routine catch_1
      Routine response_sum
    LoopTerminator trials_2
  LoopTerminator trials_3
  Routine survey1
  Routine survey2
  Routine survey3
  Routine survey_4
  Routine survey5
  Routine survey6
  Routine survey7
